PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1960, 1080]
  expName = experiment
  keyboardBackend = ioHub
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Routines
  Routine ratingTest
    ImageComponent chosen_image
      image [set every repeat] = $mouse.clicked_image[0]
      pos = (0, 0.1)
      size = (0.65, 0.65)
      startVal [time (s)] = 0.0
      units = height
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    SliderComponent rating
      color = -1.0000, -1.0000, -1.0000
      forceEndRoutine = False
      granularity = 1
      labels = "Not realistic", "Very realistic"
      letterHeight = 0.05
      pos = (0, -0.3)
      saveStartStop = False
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    ImageComponent nextButton
      image = button.png
      pos = (0, -0.4)
      size = (0.2, 0.075)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_2
      clickable = nextButton
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine choosingTest
    ImageComponent stimulus_1
      image [set every repeat] = $ImageFile1
      pos = (-0.4, 0)
      size = (0.65, 0.65)
      startVal [time (s)] = 0
      units = height
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    ImageComponent stimulus_2
      image [set every repeat] = $ImageFile2
      pos = (0.4, 0)
      size = (0.65, 0.65)
      startVal [time (s)] = 0.0
      units = height
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    MouseComponent mouse
      clickable = stimulus_1, stimulus_2
      forceEndRoutineOnPress = valid click
      newClicksOnly = False
      saveMouseState = on click
      saveParamsClickable = image
      startVal [time (s)] = 0.0
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    CodeComponent chosenImageVerification
      Code Type = Auto->JS
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      End Routine:
        if len(mouse.clicked_image) > 0:
            #To sanitize the .csv file data concerning the selected image
            trialsTest.addData('selectedImage', mouse.clicked_image[0])
            if mouse.clicked_image[0] == SintheticImageFile:
                total_correct_answers += 1
                trialsTest.addData('correctAns', 1)
            else:
                trialsTest.addData('correctAns', 0)
            #Store decision time
            trialsTest.addData('decisionTime', mouse.time[0])
    TextComponent countdown_string
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.10
      pos = (0, -0.40)
      text [set every frame] = $countdown_timer
      wrapWidth = 700
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    TextComponent select_ai_synthetic_image
      letterHeight = 0.05
      pos = (0, 0.40)
      startVal [time (s)] = 0.0
      text = Select the AI-generated synthetic image
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    CodeComponent countdown_timer
      Code Type = Auto->JS
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      Before Experiment:
        #Countdown string to be presented to the user
        countdown_timer = ""
      Begin Routine:
        task_timer = core.CountdownTimer(start = 9) # duration in seconds.
      Each Frame:
        # end task after 5 min:
        time_left = task_timer.getTime()

        # optional - only needed if you want to display these to the subject:
        minutes = int(time_left/60)
        seconds = int(time_left - minutes * 60)

        countdown_timer = f'Time left: 00:00:0{seconds}'

        if time_left <= 0.0:
            countdown_timer = "Make your choice now!"
  Routine blank500
  Routine initCode
    CodeComponent codeInit
      Code Type = Auto->JS
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      Before Experiment:
        import random
        import openpyxl
        #randomize the seed
        random.seed()

        #stimulus file
        infile = "image_stimuli.xlsx"

        #access the xlsx stimulus file
        inbook = openpyxl.load_workbook(infile)
        insheet = inbook.active

        #array with an entry for each loop-test
        tests = []

        #read the stimuli from our sheet
        for row in insheet.iter_rows(min_row=2, max_col=4, values_only=True):
            #skips empty rows
            if row[0] is None:
                continue
            tests.append(list(row))

        #Init of total number of image pairs
        num_items = len(tests)

        #Init total number of correct answers
        total_correct_answers = 0
      Begin Experiment:
        #randomizes intra-test image order
        for test in tests:
            #extracts image files to be showm
            image_files = [test[0], test[1]]

            #randomizes intra-test image order
            random.shuffle(image_files)

            #updates test with randomized images
            test[0] = image_files[0]
            test[1] = image_files[1]

        #randomizes inter-tests order
        random.shuffle(tests)

        #user output for debug purposes
        for test in tests:
            print(test)
  Routine testCode
    CodeComponent codeTest
      Code Type = Auto->JS
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      Begin Experiment:
        #Init trial number
        trial_num = 0
      Begin Routine:
        #Fetches current trial
        trial_test = tests[trial_num]

        #Assigns current trial image files
        ImageFile1 = trial_test[0]
        ImageFile2 = trial_test[1]
        SintheticImageFile = trial_test[2]

        #This is randomized... should it be
        trialsTest.addData('ImageFile1 ', trial_test[0])
        trialsTest.addData('ImageFile2', trial_test[1])
        trialsTest.addData('SintheticImageFile ', trial_test[2])
        trialsTest.addData('ImagesCategory', trial_test[3])

        #Updates index for next trial
        trial_num = trial_num + 1
  Routine instructions
    TextComponent text_instr
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Thank you for participating. In this experiment, you will be asked to choose from and rate a set of images. Each test is composed by a selection section and a rating section.
        At the selection section, two similar images will be presented. One is AI-generated and the other is real. Your task is to select the AI-generated image. We recommend that you respect the countdown timer so that the test does not take more time than necessary.
        At the rating section, the selected image will appear again and your task is to rate its level of realism in a scale of one to five, where one corresponds to “Not realistic” and five corresponds to “Very realistic”.
        Click the button to start the test.
    ImageComponent intro2forms
      image = start.png
      pos = (0, -0.4)
      saveStartStop = False
      size = (0.2, 0.075)
      startVal [time (s)] = 0.0
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    MouseComponent introMouse
      clickable = intro2forms
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine endStats
    TextComponent endMessage
      letterHeight = 0.075
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Thank you!
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    TextComponent endText
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $"You got " + str(total_correct_answers) + " correct image selections out of " +  str(num_items) + "\n\n\nThe test is over. To submit, click the button."
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    ImageComponent submitButton
      image = submit.png
      pos = (0, -0.25)
      saveStartStop = False
      size = (0.2, 0.075)
      startVal [time (s)] = 0.0
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    MouseComponent endMouse
      clickable = submitButton
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine forms
    TextComponent formsText
      letterHeight = 0.075
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Observer information
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    TextComponent nameBoxText
      letterHeight = 0.05
      pos = (-0.24, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = First and last name:
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    TextboxComponent nameTextBox
      autoLog = False
      bold = False
      borderColor = black
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.05
      pos = (0.31, 0.1)
      saveStartStop = False
      size = (0.6, 0.075)
      startVal [time (s)] = 0.0
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    TextComponent ageBoxText
      letterHeight = 0.05
      pos = (-0.07, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Age:
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    TextboxComponent ageTextBox
      autoLog = False
      bold = False
      borderColor = black
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.05
      pos = (0.06, 0)
      saveStartStop = False
      size = (0.1, 0.075)
      startVal [time (s)] = 0.0
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    TextComponent genderBoxText
      letterHeight = 0.05
      pos = (-0.11, -0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Gender:
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    TextboxComponent genderTextBox
      autoLog = False
      bold = False
      borderColor = black
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.05
      pos = (0.31, -0.1)
      saveStartStop = False
      size = (0.6, 0.075)
      startVal [time (s)] = 0.0
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    ImageComponent forms2test
      image = submit.png
      pos = (0, -0.4)
      size = (0.2, 0.075)
      startVal [time (s)] = 0.0
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    MouseComponent formsMouse
      clickable = forms2test
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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Flow
  Routine initCode
  Routine instructions
  Routine blank500
  Routine forms
  Routine blank500
  LoopInitiator trialsTest loopType="TrialHandler"
    loopType = random
    nReps = num_items
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    Routine testCode
    Routine choosingTest
    Routine blank500
    Routine ratingTest
    Routine blank500
  LoopTerminator trialsTest
  Routine endStats
